acquisition:
  metadata:
    driver: voxel.metadata.metadata_class
    module: MetadataClass
    init:
      metadata_dictionary:
        instrument_type: exaspim
        subject_id: 123456
        experimenter_full_name: [adam glaser]
        chamber_immersion:
          medium: 0.05X SSC
          refractive_index: 1.33
        x_anatomical_direction: Anterior_to_posterior
        y_anatomical_direction: Inferior_to_superior
        z_anatomical_direction: Left_to_right
      date_format: Year/Month/Day/Hour/Minute/Second
      name_specs:
        deliminator: _
        format: [instrument_type, subject_id]
  operations:
    vp-151mx:
#      bdv:
#        type: writer
#        driver: voxel.writers.bdv
#        module: Writer
#        init:
#          path: ./local_test
#        properties:
#          compression: none
#          data_type: uint16
      imaris:
        type: writer
        driver: voxel.writers.imaris
        module: ImarisWriter
        init:
          path: C:\local_test
        properties:
          compression: lz4shuffle
          data_type: uint16
      robocopy:
        type: transfer
        driver: voxel.file_transfers.robocopy
        module: RobocopyFileTransfer
        init:
          external_path: C:\external_test
          local_path: C:\local_test
      rsync:
        type: transfer
        driver: voxel.file_transfers.rsync
        module: RsyncFileTransfer
        init:
          external_path: C:\external_test_1
          local_path: C:\local_test
      max_projection:
        type: process
        driver: voxel.processes.max_projection.cpu.numpy
        module: CPUMaxProjection
        init:
          path: C:\local_test
        properties:
          data_type: uint16
          projection_count_px: 32
#      mean_projection:
#        type: process
#        driver: voxel.processes.cpu.mean_projection
#        module: MeanProjection
#        init:
#          path: ./local_test
#        properties:
#          data_type: uint16
#          projection_count_px: 32
      background_collection:
        type: routine
        driver: voxel.routines.background_collection
        module: BackgroundCollection
        init:
          path: C:\local_test
        properties:
          data_type: uint16
          frame_count_px: 10
  tiles: []
#    - channel: 'CH488'
#      position_mm:
#        x: -0.0053
#        y: 0.001
#        z: 0.0
#      tile_number: 0
#      488 nm:
#        power_setpoint_mw: 0.0
#      vp-151mx:
#        binning: 1.0
#      n stage axis:
#        position_mm: -2.35
#      steps: 66
#      step_size: 0.0152
#      prefix: ''
