instrument:
  channels:
    '488':
      filters: [BP488]
      lasers: [488nm]
      cameras: [vnp-604mx]
    '561':
      filters: [BP561]
      lasers: [561nm]
      cameras: [vnp-604mx]
    '639':
      filters: [LP638]
      lasers: [639nm]
      cameras: [vnp-604mx]
  devices:
    639nm:
      color: red
      driver: voxel.devices.lasers.simulated
      init:
        port: COM5
      module: SimulatedLaser
      type: laser
    ASI FW-1000:
      driver: voxel.devices.filterwheel.simulated
      init:
        filters:
          BP405: 0
          BP488: 1
          BP561: 2
          Empty1: 5
          Empty2: 6
          LP638: 3
          MB405/488/561/638: 4
        id: 0
      module: FilterWheel
      type: filter_wheel
      subdevices:
        BP405:
          type: filter
          driver: voxel.devices.filter.simulated
          module: Filter
          init:
            id: BP405
        BP488:
          type: filter
          driver: voxel.devices.filter.simulated
          module: Filter
          init:
            id: BP488
        BP561:
          type: filter
          driver: voxel.devices.filter.simulated
          module: Filter
          init:
            id: BP561
        LP638:
          type: filter
          driver: voxel.devices.filter.simulated
          module: Filter
          init:
            id: LP638
        MB405/488/561/638:
          type: filter
          driver: voxel.devices.filter.simulated
          module: Filter
          init:
            id: MB405/488/561/638

    ASI LS-100 x axis:
      driver: voxel.devices.stage.simulated
      init:
        hardware_axis: x
        instrument_axis: z
      module: Stage
      settings:
        speed_mm_s: 1.0
      type: scanning_stage
    ASI MS-8000 x axis:
      driver: voxel.devices.stage.simulated
      init:
        hardware_axis: y
        instrument_axis: x
      module: Stage
      settings:
        speed_mm_s: 1.0
      type: tiling_stage
    ASI MS-8000 y axis:
      driver: voxel.devices.stage.simulated
      init:
        hardware_axis: z
        instrument_axis: y
      module: Stage
      settings:
        speed_mm_s: 1.0
      type: tiling_stage
    PCIe-6738:
      driver: voxel.devices.daq.simulated
      init:
        dev: Dev2
      settings:
        tasks:
          ao_task:
            name: ao task
            ports:
              stage:
                device_max_volts: 5.0
                device_min_volts: 0.0
                parameters:
                  end_time_ms:
                    channels:
                      '488': 350.0
                      '561': 350.0
                      '639': 350.0
                  max_volts:
                    channels:
                      '488': 5.0
                      '561': 5.0
                      '639': 5.0
                  min_volts:
                    channels:
                      '488': 0.0
                      '561': 0.0
                      '639': 0.0
                  start_time_ms:
                    channels:
                      '488': 60.0
                      '561': 60.0
                      '639': 60.0
                port: ao1
                waveform: square wave
              tunable lens:
                device_max_volts: 5.0
                device_min_volts: 0.0
                parameters:
                  amplitude_volts:
                    channels:
                      '488': 1.5
                      '561': 1.0
                      '639': 1.0
                  cutoff_frequency_hz:
                    channels:
                      '488': 200
                      '561': 200
                      '639': 200
                  end_time_ms:
                    channels:
                      '488': 400.0
                      '561': 400.0
                      '639': 400.0
                  offset_volts:
                    channels:
                      '488': 2.5
                      '561': 2.5
                      '639': 2.5
                  start_time_ms:
                    channels:
                      '488': 10.0
                      '561': 10.0
                      '639': 10.0
                port: ao0
                waveform: sawtooth
              x galvo mirror:
                device_max_volts: 5.0
                device_min_volts: 0.0
                parameters:
                  amplitude_volts:
                    channels:
                      '488': 1.0
                      '561': 1.0
                      '639': 1.0
                  cutoff_frequency_hz:
                    channels:
                      '488': 200
                      '561': 200
                      '639': 200
                  end_time_ms:
                    channels:
                      '488': 400.0
                      '561': 400.0
                      '639': 400.0
                  offset_volts:
                    channels:
                      '488': 2.5
                      '561': 2.5
                      '639': 2.5
                  start_time_ms:
                    channels:
                      '488': 10.0
                      '561': 10.0
                      '639': 10.0
                port: ao2
                waveform: triangle wave
            timing:
              period_time_ms: 500
              rest_time_ms: 50
              retriggerable: 'on'
              sample_mode: finite
              sampling_frequency_hz: 10000
              trigger_mode: 'on'
              trigger_polarity: rising
              trigger_port: PFI0
          co_task:
            counters:
              - ctr0
            name: co task
            timing:
              frequency_hz: 2.0
              output_port: PFI0
              trigger_mode: 'off'
          do_task:
            name: do task
            ports:
              laser:
                parameters:
                  end_time_ms:
                    channels:
                      '488': 200.0
                      '561': 200.0
                      '639': 200.0
                  start_time_ms:
                    channels:
                      '488': 100.0
                      '561': 100.0
                      '639': 100.0
                port: port0
                waveform: square wave
            timing:
              period_time_ms: 500
              rest_time_ms: 50
              retriggerable: 'on'
              sample_mode: finite
              sampling_frequency_hz: 10000
              trigger_mode: 'on'
              trigger_polarity: rising
              trigger_port: PFI0
      module: DAQ
      type: daq
    combiner_0:
      driver: voxel.devices.lasers.simulated
      init:
        port: COM3
      module: SimulatedCombiner
      subdevices:
        488nm:
          color: purple
          driver: voxel.devices.lasers.simulated
          init:
            coefficients:
              0: -57.515
              1: 3.218
            port: COM5
            prefix: L6
          module: SimulatedLaser
          settings:
            cdrh: 'OFF'
            constant_current: 'ON'
            modulation_mode: digital
          type: laser
        561nm:
          color: greenyellow
          driver: voxel.devices.lasers.simulated
          init:
            port: COM5
            prefix: L3
          module: SimulatedLaser
          type: laser
      type: combiner
    tigerbox:
      driver: voxel.devices.stage.simulated
      module: Joystick
      type: joystick
    vnp-604mx:
      driver: voxel.devices.camera.simulated
      init:
        id: sim001
      module: Camera
      settings:
        exposure_time_ms: 40.0
        pixel_type: mono16
        roi:
          height_offest_px: 4744
          height_px: 1152
          width_offset_px: 6528
          width_px: 1152
        trigger:
          mode: 'off'
          polarity: rising
          source: external
      type: camera
    vp-151mx:
      driver: voxel.devices.camera.simulated
      init:
        id: sim000
      module: Camera
      settings:
        exposure_time_ms: 20.0
        pixel_type: mono16
        roi:
          height_offest_px: 4744
          height_px: 1152
          width_offset_px: 6528
          width_px: 1152
        trigger:
          mode: 'off'
          polarity: rising
          source: external
      type: camera
  id: exaspim-01
  master_device: vnp-604mx
