instrument:
  id: exaspim-01
  master_device: vp-151mx
  channels:
    '488':
      filters: [BP488]
      lasers: [488nm]
      cameras: [vp-151mx]
    '561':
      filters: [BP561]
      lasers: [561nm]
      cameras: [vp-151mx]
    '639':
      filters: [LP638]
      lasers: [639nm]
      cameras: [vp-151mx]
  devices:
    vp-151mx:
      type: camera
      driver: voxel.devices.camera.simulated
      module: Camera
      init:
        id: sim000
      settings:
        binning: 1
        exposure_time_ms: 80.0
        pixel_type: mono16
        height_offest_px: 0
        height_px: 14192
        width_offset_px: 0
        width_px: 10640
        trigger:
          mode: 'off'
          polarity: rising
          source: external
    488nm:
      type: laser
      driver: voxel.devices.lasers.simulated
      module: SimulatedLaser
      color: blue
      init:
        wavelength: 488
        id: COM3
    561nm:
      type: laser
      driver: voxel.devices.lasers.simulated
      module: SimulatedLaser
      color: green
      init:
        wavelength: 561
        id: COM4
    639nm:
      type: laser
      driver: voxel.devices.lasers.simulated
      module: SimulatedLaser
      color: red
      init:
        wavelength: 639
        id: COM5
    ASI FW-1000:
      type: filter_wheel
      driver: voxel.devices.filterwheel.simulated
      init:
        filters:
          BP405: 0
          BP488: 1
          BP561: 2
          LP638: 3
          MB405/488/561/638: 4
          Empty1: 5
          Empty2: 6
        id: 0
      module: FilterWheel
      subdevices:
        BP405:
          type: filter
          driver: voxel.devices.filter.simulated
          module: Filter
          init:
            id: BP405
        BP488:
          type: filter
          driver: voxel.devices.filter.simulated
          module: Filter
          init:
            id: BP488
        BP561:
          type: filter
          driver: voxel.devices.filter.simulated
          module: Filter
          init:
            id: BP561
        LP638:
          type: filter
          driver: voxel.devices.filter.simulated
          module: Filter
          init:
            id: LP638
        MB405/488/561/638:
          type: filter
          driver: voxel.devices.filter.simulated
          module: Filter
          init:
            id: MB405/488/561/638
    ASI MS8000 x axis:
      type: scanning_stage
      driver: voxel.devices.stage.simulated
      module: Stage
      init:
        hardware_axis: x
        instrument_axis: z
      settings:
        speed_mm_s: 1.0
    ASI MS8000 y axis:
      type: tiling_stage
      driver: voxel.devices.stage.simulated
      module: Stage
      init:
        hardware_axis: y
        instrument_axis: x
      settings:
        speed_mm_s: 1.0
    ASI LS100 z axis:
      type: tiling_stage
      driver: voxel.devices.stage.simulated
      module: Stage
      init:
        hardware_axis: z
        instrument_axis: y
      settings:
        speed_mm_s: 1.0
    ASI joystick:
      driver: voxel.devices.stage.simulated
      module: Joystick
      type: joystick
    PCIe-6738:
      type: daq
      driver: voxel.devices.daq.simulated
      module: DAQ
      init:
        dev: Dev2
      settings:
        tasks:
          ao_task:
            name: ao task
            ports:
              stage:
                device_max_volts: 5.0
                device_min_volts: 0.0
                parameters:
                  end_time_ms:
                    channels:
                      '488': 350.0
                      '561': 350.0
                      '639': 350.0
                  max_volts:
                    channels:
                      '488': 5.0
                      '561': 5.0
                      '639': 5.0
                  min_volts:
                    channels:
                      '488': 0.0
                      '561': 0.0
                      '639': 0.0
                  start_time_ms:
                    channels:
                      '488': 60.0
                      '561': 60.0
                      '639': 60.0
                port: ao1
                waveform: square wave
              tunable lens:
                device_max_volts: 5.0
                device_min_volts: 0.0
                parameters:
                  amplitude_volts:
                    channels:
                      '488': 1.5
                      '561': 1.0
                      '639': 1.0
                  cutoff_frequency_hz:
                    channels:
                      '488': 200
                      '561': 200
                      '639': 200
                  end_time_ms:
                    channels:
                      '488': 400.0
                      '561': 400.0
                      '639': 400.0
                  offset_volts:
                    channels:
                      '488': 2.5
                      '561': 2.5
                      '639': 2.5
                  start_time_ms:
                    channels:
                      '488': 10.0
                      '561': 10.0
                      '639': 10.0
                port: ao0
                waveform: sawtooth
            timing:
              period_time_ms: 500
              rest_time_ms: 50
              retriggerable: 'on'
              sample_mode: finite
              sampling_frequency_hz: 10000
              trigger_mode: 'on'
              trigger_polarity: rising
              trigger_port: PFI0
          co_task:
            counters:
              - ctr0
            name: co task
            timing:
              frequency_hz: 2.0
              output_port: PFI0
              trigger_mode: 'off'