acquisition:
  metadata:
    driver: exaspim_control.metadata.aind_metadata_class
    module: AINDMetadataClass
    init:
      metadata_dictionary:
        instrument_type: exaspim
        subject_id: 123456
        experimenter_full_name: [adam glaser]
        chamber_immersion:
          medium: other
          refractive_index: 1.33
        x_anatomical_direction: Anterior_to_posterior
        y_anatomical_direction: Inferior_to_superior
        z_anatomical_direction: Left_to_right
      date_format: Year/Month/Day/Hour/Minute/Second
      name_specs:
        deliminator: _
        format: [instrument_type, subject_id]
  operations:
    vp-151mx:
      imaris:
        type: writer
        driver: voxel.writers.imaris
        module: ImarisWriter
        init:
          path: C:\local_test
        properties:
          compression: lz4shuffle
          data_type: uint16
      robocopy:
        type: transfer
        driver: voxel.file_transfers.robocopy
        module: RobocopyFileTransfer
        init:
          external_path: C:\external_test
          local_path: C:\local_test
      rsync:
        type: transfer
        driver: voxel.file_transfers.rsync
        module: RsyncFileTransfer
        init:
          external_path: C:\external_test_1
          local_path: C:\local_test
      max_projection:
        type: process
        driver: voxel.processes.max_projection.cpu.numpy
        module: CPUMaxProjection
        init:
          path: C:\local_test
        properties:
          data_type: uint16
          projection_count_px: 32
  tiles: []
